WorkflowBuilder(Version=2.8.0-alpha018)
Annotation README
  Text:
    # Trial Settings

    | Parameter      | Value | Comments |
    | ----------- | ----------- | ----------- |
    | CorridorType      | Int       |Specifies the corridor type to be rendered. ([0,1...]) |
    | EnablePassiveMode      | Bool     |Enables(1) or Disables(0) a pre-defined passive mode logic in the selected trial type|
    | GainPassiveMode      | Float       |Specifies the gain to be used if using a passive viewig mode during the trial |
    | StimATex   | String;String        | Path to the textures to be used in StimA Segment Left and Right Walls, respectively  |
    | StimBTex   | String;String        | Path to the textures to be used in StimB Segment Left and Right Walls, respectively  |
    | StimCTex   | String;String        | Path to the textures to be used in StimC Segment Left and Right Walls, respectively  |
    | RewardEnable   | Bool     |Enables(1) or Disables(0) a pre-defined reward logic in the selected trial type|
    | RewardAmount | Float;Float | Reward amount (in milliseconds) to be delivered in the HIGH and LOW conditions, respectively |
    | RewardProbability | Float;Float | Reward probability (0-1) in the HIGH and LOW conditions, respectively |
    | RewardLocation | Float | Location in the corridor that will trigger a reward event |
    | RewardDelay | Float | Temporal delay (in seconds) for reward delivery after RewardLocation has been crossed |
    | LedStimEnable      | Bool     |Enables(1) or Disables(0) a pre-defined Led stimulation delivery logic in the selected trial type|
    | LedStimIndex | Int | Index of the Led stimulation protocol to be used |
    | LedStimLocation | Float | Location in the corridor that will trigger an Led stimulation event |
    | LedStimDelay | Float | Temporal delay (in seconds) for Led stimulation event after LedStimLocation has been crossed |
    | TeleportEnable   | Bool     |Enables(1) or Disables(0) a pre-defined teleport logic in the selected trial type|
    | TeleportFrom   | Float     |Specifies the teleport position trigger. In other words the position that will end the current trial |
    | TeleportTo   | Float     |Specifies the teleport destination. In other words, the initiation position of the next trial |
    | TeleportDelay   | Float     |Temporal delay (in seconds) for the teleport event to trigger after the TeleportFrom position has been crossed|
    | TeleportLock   | Bool     |Specifies whether the position in VR can be update (1) or not (0), during TeleportDelay|
    | TeleportOnLick | Bool | Specifies whether "Lick" events will result (1), or not(0), in teleports to TeleportTo prior to trial conclusion |
    | TeleportOnLickTo   | Float     |Specifies the teleport destination after a lick |
    | TeleportOnLickRefractory | Float | Minimum period between two teleport events triggered by licking events |
    | SetWallVisibilityEnable | Bool | Enables(1) or Disables(0) a pre-defined SetWallVisibility logic in the selected trial type |
    | SetWallVisibilityLocation | Float | Location in the corridor that will trigger a SetWallVisibility event |
    | SetWallVisibilitySegment | String | Name of the segment to be targeted by the SetWallVisibilityFunction |
    | SetWallVisibilityDelay   | Float     | Temporal delay (in seconds) for the SetWallVisibility event to trigger|
    | SetWallVisibilityValue   | Bool; Bool | Visibility value to be set by the SetWallVisibility function|

Annotation SegmentCommands
  Text:
    # Currently available commands:
      All Commands are of the format:
      `Tuple<String, String, String>` or `Tuple<SegmentName, FunctionName, Value>`


     - Segment, LeftWallVisibility, ["1", "0"]
     - Segment, RightWallVisibility, ["1", "0"]

Annotation(Text="")
-> GroupWorkflow Logging
    ExternalizedMapping(Value(DisplayName=Path))
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=C:\Users\mfhlab\Desktop\Data)
    -> Take(Count=1)
    -> Timestamp
    -> Format(Format={0}/{1:yyyy-MM-ddTHH-mm-ss}, Selector="Value,Timestamp.UtcDateTime")
    -> AsyncSubject SessionRootPath

    GroupWorkflow LogFrameEvents
        GroupWorkflow TimestampLogger
            SubscribeSubject LogFrameEvent => #0
            SubscribeSubject RenderFrameEvent
            -> MemberSelector(Selector=TimeStep.ElapsedRealTime)
            -> Accumulate
            -> ElementIndex
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #5
              Expression:
                new(
                Index as Index,
                Value as Time)
            #0, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as EventName,
                Item2 as Frame)
            -> PublishSubject FrameEventLogger
            -> WorkflowOutput

        Annotation(Text="List of all events to be logged using frame number")
        -> GroupWorkflow ListFrameEvents
            SubscribeSubject LickEvent
            -> StringProperty(Value=Lick)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveReward
            -> StringProperty(Value=Reward)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject GiveOptoStim
            -> StringProperty(Value=OptoStim)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject TeleportTo
            -> StringProperty(Value=Teleport)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject WallVisibilityEvent
            -> StringProperty(Value=WallVisibility)
            -> MulticastSubject LogFrameEvent

            SubscribeSubject LogFrameEvent
            -> WorkflowOutput

    Disable GroupWorkflow Loggers
        SubscribeSubject AI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=AnalogInput.bin)

        SubscribeSubject DI_Data
        -> IncludeWorkflow(Path=Extensions\LoggerBlob.bonsai, FileName=DigitalInput.bin)

        SubscribeSubject RotaryEncoderPosition
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=RotaryEncoder.csv)

        SubscribeSubject CurrentPosition
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new(it.Z as Position)
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=VrPosition.csv)

        SubscribeSubject FrameEventLogger
        -> IncludeWorkflow(Path=Extensions\LoggerCsv.bonsai, FileName=FrameEvents.csv)

GroupWorkflow __Init__
    GroupWorkflow DefineReward
        ExternalizedMapping(Value(DisplayName=RewardHighProbability))
        -> FloatProperty(Value=0.8) => #1
        ExternalizedMapping(Value(DisplayName=RewardHighAmount))
        -> FloatProperty(Value=25.5) => #3
        ExternalizedMapping(Value(DisplayName=RewardLowAmount))
        -> FloatProperty(Value=0) => #5
        #1, #3, #5 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression:
            new(
            Item1 as RewardHighProbability,
            Item1 as RewardHighAmount,
            Item2 as RewardLowAmount)
        -> Take(Count=1)
        -> WorkflowOutput
    -> BehaviorSubject CurrentRewardSettings

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    BehaviorSubject<System.Boolean> WallVisibilityEvent
    BehaviorSubject<System.String> LogFrameEvent

GroupWorkflow RenderConfig
    Bonsai.Shaders.CreateWindow
      Width=960
      Height=540
      VSync=On
      SwapSync=false
      ClearColor=Gray
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location=nil
      WindowBorder=Fixed
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState=""
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> IncludeWorkflow(Path=BonVision:Primitives.BonVisionResources.bonsai)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=BluePlaid
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Assets\Textures\plaid_blue.png
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=ColorDots
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Assets\Textures\Camilo.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Reward
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Assets\Textures\CamiloReward.jpg
          ColorType=Unchanged
          FlipMode=Vertical
        TextureConfiguration=Bonsai.Shaders.ImageTexture
          Name=Floor
          Width=nil
          Height=nil
          InternalFormat=Rgba
          WrapS=Repeat
          WrapT=Repeat
          MinFilter=Linear
          MagFilter=Linear
          FileName=Assets\Textures\Floor.png
          ColorType=Unchanged
          FlipMode=Vertical
    -> Bonsai.Resources.LoadResources
    -> WorkflowOutput

    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\left_intrinsics.yml, ExtrinsicsFileName=Calibration\left_extrinsics.yml)
    -> Take(Count=1) => #6
    IncludeWorkflow(Path=Extensions\ScreenCalibration.bonsai, IntrinsicsFileName=Calibration\right_intrinsics.yml, ExtrinsicsFileName=Calibration\right_extrinsics.yml)
    -> Take(Count=1) => #8
    #6, #8 -> Merge
    -> ToArray
    -> AsyncSubject ScreenCalibrationSettings

    Bonsai.Shaders.RenderFrame
    -> PublishSubject RenderFrameEvent
    -> IncludeWorkflow(Path=BonVision:Environment.CubemapView.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1, Light(X=0, Y=0, Z=0))
    -> PublishSubject Draw3DStim
    -> Bonsai.Shaders.RenderCubemap(RenderState="", ClearColor=DimGray, ClearMask="DepthBufferBit ColorBufferBit", FaceSize=nil, InternalFormat=Rgb, MinFilter=Linear, MagFilter=Linear)
    -> GroupWorkflow MonitorView
        WorkflowInput Source1
        -> BehaviorSubject PreMonitorDraw

        SubscribeSubject PreMonitorDraw => #2
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=0))
        -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation)) => #5
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=0))
        -> MemberSelector(Selector=Translation) => #8
        SubscribeSubject ManualScreenCalibration => #9
        FloatProperty(Value=0.1) => #10
        #9, #10 -> WithLatestFrom
        -> Multiply => #12
        #8, #12 -> CombineLatest
        -> Add
        -> PropertyMapping(Translation) => #15
        #2, #5, #15 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=40.10704565915762, Z=0), Translation(X=0, Y=0, Z=0.1))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0, Y=0, Width=0.5, Height=1) => #17
        SubscribeSubject PreMonitorDraw => #18
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=1))
        -> PropertyMapping(Width(Selector=DisplayWidth), Height(Selector=DisplayHeight), Rotation(Selector=Rotation)) => #21
        SubscribeSubject ScreenCalibrationSettings
        -> Index(Operand=IntProperty(Value=1))
        -> MemberSelector(Selector=Translation) => #24
        SubscribeSubject ManualScreenCalibration => #25
        FloatProperty(Value=0.1) => #26
        #25, #26 -> WithLatestFrom
        -> Multiply => #28
        #24, #28 -> CombineLatest
        -> Add
        -> PropertyMapping(Translation) => #31
        #18, #21, #31 -> IncludeWorkflow(Path=BonVision:Environment.ViewWindow.bonsai, Width=0.543744, Height=0.302616, Rotation(X=0, Y=40.10704565915762, Z=0), Translation(X=0, Y=0, Z=0.1))
        -> IncludeWorkflow(Path=BonVision:Environment.DrawViewport.bonsai, X=0.5, Y=0, Width=0.5, Height=1) => #33
        #17, #33 -> Zip
        -> WorkflowOutput

        Bonsai.Vision.CreatePoint3d(X=0, Y=0, Z=0)
        -> Take(Count=1) => #37
        Bonsai.Shaders.Input.KeyDown(Key=Left, Modifiers=nil)
        -> IntProperty(Value=-1) => #39
        Bonsai.Shaders.Input.KeyDown(Key=Right, Modifiers=nil)
        -> IntProperty(Value=1) => #41
        #39, #41 -> Merge => #42
        -> PropertyMapping(X) => #43
        #42, #43 -> Bonsai.Vision.CreatePoint3d(X=-1, Y=0, Z=0) => #44
        Bonsai.Shaders.Input.KeyDown(Key=Up, Modifiers=nil)
        -> IntProperty(Value=1) => #46
        Bonsai.Shaders.Input.KeyDown(Key=Down, Modifiers=nil)
        -> IntProperty(Value=-1) => #48
        #46, #48 -> Merge => #49
        -> PropertyMapping(Y) => #50
        #49, #50 -> Bonsai.Vision.CreatePoint3d(X=0, Y=1, Z=0) => #51
        #44, #51 -> Merge
        -> Accumulate => #53
        #37, #53 -> Concat
        -> BehaviorSubject ManualScreenCalibration
    -> PublishSubject PostDrawing

    GroupWorkflow SyncQuad
        SubscribeSubject PostDrawing
        -> Int64Property(Value=1)
        -> Accumulate
        -> Mod(Operand=WorkflowProperty<System.Int64>(Value=2))
        -> Bonsai.Shaders.UpdateRenderState(RenderState="")
        -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1) => #5
        -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-8, Right=8, Bottom=-4.5, Top=4.5) => #6
        #5 -> PropertyMapping(ColorR, ColorG, ColorB) => #7
        #6, #7 -> IncludeWorkflow
          Path=BonVision:Primitives.DrawQuad.bonsai
          ExtentX=0.2
          ExtentY=0.2
          LocationX=7.9
          LocationY=4.4
          Layer=10
          Angle=0
          ColorR=1
          ColorG=1
          ColorB=1
          ColorA=1
        -> WorkflowOutput
-> WorkflowOutput

GroupWorkflow Hardware
    GroupWorkflow NIDAQ
        GroupWorkflow AnalogOutput
            IntProperty(Value=30000) => #0
            IntProperty(Value=3000) => #1
            #0, #1 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AO_Settings

            SubscribeSubject AO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferLength(Selector=BufferSize))
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=3000, Frequency=50, Waveform=Square, SampleRate=30000, Depth=U8, Amplitude=1, Offset=0, Phase=0)
            -> PublishSubject AO_Clock

            SubscribeSubject DO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferSize(Selector=BufferSize)) => #11
            SubscribeSubject AO_Generation => #12
            #11, #12 -> Disable Bonsai.DAQmx.AnalogOutput
              SignalSource=""
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=FiniteSamples
              BufferSize=100
              Channels(AnalogOutputChannelConfiguration(ChannelName=OptoStim, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ao0, VoltageUnits=Volts))

            IncludeWorkflow(Path=Extensions\PulseGenerator.bonsai, SampleRate=1000, Frequency=5, Amplitude=1, WaveDuration=1, PulseDuration=0.02)
            -> Take(Count=1) => #15
            IncludeWorkflow(Path=Extensions\PulseGenerator.bonsai, SampleRate=1000, Frequency=10, Amplitude=1, WaveDuration=1, PulseDuration=0.02)
            -> Take(Count=1) => #17
            #15, #17 -> Concat
            -> ToArray
            -> AsyncSubject OptoWaveformBank

            Defer Constant => #21
                SubscribeSubject AO_Clock => #0
                SubscribeSubject AO_Settings => #1
                -> MemberSelector(Selector=BufferSize) => #2
                #1 -> IntProperty(Value=1) => #3
                #2, #3 -> Zip
                -> PropertyMapping(Size(Selector="it.Item1, it.Item2")) => #5
                #0, #5 -> Bonsai.Dsp.ScalarBuffer(Size(Width=3000, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
                -> WorkflowOutput
            PublishSubject<System.Int32> GiveOptoStim => #22
            #21, #22 -> TakeUntil => #23
            BehaviorSubject<System.Int32> CurrentOptoStimId
            -> PropertyMapping(StimId(Selector=it))
            -> IncludeWorkflow(Path=Extensions\PlayWaveform.bonsai, StimId=0) => #26
            #23, #26 -> Concat
            -> Repeat
            -> BehaviorSubject AO_Generation

        GroupWorkflow DigitalOutput
            IntProperty(Value=1000) => #0
            IntProperty(Value=100) => #1
            #0, #1 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject DO_Settings

            SubscribeSubject DO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferLength(Selector=BufferSize))
            -> Bonsai.Dsp.FunctionGenerator(BufferLength=100, Frequency=50, Waveform=Square, SampleRate=1000, Depth=U8, Amplitude=1, Offset=0, Phase=0)
            -> PublishSubject DO_Clock

            SubscribeSubject DO_Settings
            -> PropertyMapping(SampleRate(Selector=SamplingRate), BufferSize(Selector=BufferSize)) => #11
            SubscribeSubject DO_Generation => #12
            #11, #12 -> Disable Bonsai.DAQmx.DigitalOutput
              SignalSource=""
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=100
              Channels(DigitalOutputChannelConfiguration(ChannelName=Solenoid, Grouping=OneChannelForEachLine, Lines=Dev1/port1/line0))

            Defer Constant => #14
                SubscribeSubject DO_Clock => #0
                SubscribeSubject DO_Settings => #1
                -> MemberSelector(Selector=BufferSize) => #2
                #1 -> IntProperty(Value=1) => #3
                #2, #3 -> Zip
                -> PropertyMapping(Size(Selector="it.Item1, it.Item2")) => #5
                #0, #5 -> Bonsai.Dsp.ScalarBuffer(Size(Width=100, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
                -> WorkflowOutput
            PublishSubject<System.Int32> GiveReward => #15
            #14, #15 -> TakeUntil => #16
            BehaviorSubject<System.Int32> CurrentRewardAmount
            -> PropertyMapping(ValveTimeOn)
            -> IncludeWorkflow(Path=Extensions\RewardPulse.bonsai, ValveTimeOn=0) => #19
            #16, #19 -> Concat
            -> Bonsai.Dsp.ConvertScale(Depth=U8, Scale=1, Shift=0)
            -> Repeat
            -> BehaviorSubject DO_Generation

        GroupWorkflow AnalogInput
            IntProperty(Value=1000) => #0
            IntProperty(Value=10) => #1
            #0, #1 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject AI_Settings

            Disable SubscribeSubject AI_Settings
            -> Disable MemberSelector(Selector=SamplingRate)
            -> Disable PropertyMapping(SampleRate) => #8
            Disable SubscribeSubject AI_Settings
            -> Disable MemberSelector(Selector=BufferSize)
            -> Disable PropertyMapping(BufferSize) => #11
            Source1=#8, Source3=#11 -> Disable Bonsai.DAQmx.AnalogInput
              SignalSource=""
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=10
              SamplesPerChannel=nil
              Channels
                AnalogInputChannelConfiguration(ChannelName=LickSensor, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai0, TerminalConfiguration=Differential, VoltageUnits=Volts)
                AnalogInputChannelConfiguration(ChannelName=CopyOptoStim, MinimumValue=-10, MaximumValue=10, PhysicalChannel=Dev1/ai1, TerminalConfiguration=Differential, VoltageUnits=Volts)
            -> Disable PublishSubject AI_Data

            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #16
            SubscribeSubject AI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferLength) => #19
            #16, #19 -> Bonsai.Dsp.FunctionGenerator(BufferLength=10, Frequency=60, Waveform=Sine, SampleRate=1000, Amplitude=1, Offset=0, Phase=0)
            -> PublishSubject AI_Data

        GroupWorkflow DigitalInput
            IntProperty(Value=1000) => #0
            IntProperty(Value=100) => #1
            #0, #1 -> Zip
            -> Take(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                it.Item1 as SamplingRate,
                it.Item2 as BufferSize,
                it.Item1 / it.Item2 as NumBuffersPerSecond)
            -> AsyncSubject DI_Settings

            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=SamplingRate)
            -> PropertyMapping(SampleRate) => #8
            SubscribeSubject DI_Settings
            -> MemberSelector(Selector=BufferSize)
            -> PropertyMapping(BufferSize) => #11
            Annotation Notes(Text="The whole Digital Input port is acquired as a single byte per timepoint") => #12
            #8, #11, #12 -> Disable Bonsai.DAQmx.DigitalInput
              SignalSource=""
              SampleRate=1000
              ActiveEdge=Rising
              SampleMode=ContinuousSamples
              BufferSize=100
              SamplesPerChannel=nil
              Channels(DigitalInputChannelConfiguration(ChannelName=DigitalInputs, Grouping=OneChannelForEachLine, Lines=Dev1/port0/line0:7))
            -> Bonsai.Dsp.ScalarBuffer(Size(Width=100, Height=1), Depth=F32, Channels=1, Value(Val0=0, Val1=0, Val2=0, Val3=0))
            -> PublishSubject DI_Data

        GroupWorkflow PwmGenerator
            SubscribeSubject CameraFPS
            -> PropertyMapping(Frequency)
            -> Bonsai.DAQmx.CounterOutput(Channel=Dev1/ctr1, TriggerSource="", Frequency=50, DutyCycle=0.5, NumberOfSamples=nil)
            -> Unit
            -> WorkflowOutput

        GroupWorkflow RotaryEncoder
            SubscribeSubject RenderFrameEvent
            -> ElementIndex => #1
            -> MemberSelector(Selector=Value.TimeStep.ElapsedRealTime)
            -> Accumulate => #3
            -> Bonsai.DAQmx.RotaryEncoderInput(Channel=Dev1/ctr0, DecoderType=X1, TicksPerRevolution=1000, StartingRadians=0, ResetOnZ=false)
            -> Disable IntProperty(Value=0) => #5
            #1 -> MemberSelector(Selector=Index) => #6
            #5, #6, #3 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression:
                new(
                Item1 as RotaryEncoder,
                Item2 as FrameIndex,
                Item3 as RenderElapsedTime)
            -> PublishSubject RotaryEncoderPosition
            -> WorkflowOutput

    GroupWorkflow Cameras
        IntProperty(Value=50)
        -> Take(Count=1)
        -> AsyncSubject CameraFPS

    GroupWorkflow PostProcessing
        GroupWorkflow LickSensor
            SubscribeSubject AI_Data
            -> Bonsai.Dsp.SelectChannels(Channels(int=0))
            -> PublishSubject LickSensor

            SubscribeSubject LickSensor
            -> Bonsai.Dsp.ConvertScale(Depth=F32, Scale=1, Shift=0)
            -> Bonsai.Dsp.Threshold(ThresholdValue=0, MaxValue=1, ThresholdType=Binary)
            -> Bonsai.Dsp.Sum
            -> MemberSelector(Selector=Val0)
            -> GreaterThan(Operand=DoubleProperty(Value=7))
            -> SelectMany Draw
                Bonsai.Numerics.CreateRandom(Seed=nil)
                -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
                -> Bonsai.Numerics.Distributions.Sample => #2
                ExternalizedMapping(Value(DisplayName=Probability)) => #3
                #2, #3 -> GreaterThan(Operand=DoubleProperty(Value=0.9))
                -> Take(Count=1)
                -> WorkflowOutput
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Unit
            -> PublishSubject LickEvent

GroupWorkflow PositionUpdates
    FloatProperty(Value=0)
    -> Take(Count=1) => #1
    Bonsai.Shaders.Input.KeyDown(Key=F2, Modifiers=nil)
    -> FloatProperty(Value=0) => #3
    BehaviorSubject<System.Single> TeleportTo => #4
    #1, #3, #4 -> Merge => #5
    ExternalizedMapping(PositionMax, PositionMin) => #6
    #5, #6 -> CreateObservable ResetPosition
        WorkflowInput Source1
        -> Take(Count=1)
        -> AsyncSubject TeleportPosition

        ExternalizedMapping(Value(DisplayName=PositionMin))
        -> FloatProperty(Value=-0.5) => #4
        ExternalizedMapping(Value(DisplayName=PositionMax))
        -> FloatProperty(Value=7) => #6
        #4, #6 -> CombineLatest
        -> BehaviorSubject PositionBounds

        SubscribeSubject TeleportPosition
        -> Take(Count=1) => #10
        SubscribeSubject DisplacementUpdate => #11
        SubscribeSubject TeleportPosition => #12
        #11, #12 -> Scan => #13
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Accumulation) => #1
            #0 -> MemberSelector(Selector=Value) => #2
            #1, #2 -> Zip
            -> Add => #4
            SubscribeSubject PositionBounds => #5
            #4, #5 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #7
              Expression: it.Item1 < it.Item2.Item1 ? it.Item2.Item1 : (it.Item1 > it.Item2.Item2 ? it.Item2.Item2 : it.Item1)
            #7, #4 -> Zip
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        #10, #13 -> Concat
        -> WorkflowOutput
    -> Switch
    -> InputMapping(Z(Selector=it)) => #9
    ExternalizedMapping(Y(DisplayName=DefaultY), X(DisplayName=DefaultX)) => #10
    #9, #10 -> Bonsai.Shaders.CreateVector3(X=0, Y=0.2, Z=0)
    -> BehaviorSubject CurrentPosition

    BooleanProperty(Value=true)
    -> BehaviorSubject EnableDisplacementUpdates

    Disable SubscribeSubject EncoderPosition
    -> Disable Bonsai.Dsp.Difference(Order=1)
    -> Disable Multiply(Operand=FloatProperty(Value=0.0005)) => #17
    Bonsai.Shaders.Input.MouseWheel
    -> MemberSelector(Selector=EventArgs.DeltaPrecise)
    -> Multiply(Operand=FloatProperty(Value=0.05)) => #20
    #17, #20 -> Condition EnableUpdates
        SubscribeSubject EnableDisplacementUpdates
        -> WorkflowOutput
    -> InputMapping(Value(Selector=it))
    -> FloatProperty(Value=0.15) => #23
    Bonsai.Shaders.UpdateFrame => #24
    BehaviorSubject<System.Single> PassiveUpdateGain
    -> PropertyMapping(Value) => #26
    #24, #26 -> FloatProperty(Value=0) => #27
    #23, #27 -> Merge
    -> PublishSubject DisplacementUpdate

GroupWorkflow EnvironmentDrawing
    ExternalizedMapping(Value(DisplayName=CorridorHeight))
    -> FloatProperty(Value=0.5) => #1
    ExternalizedMapping(Value(DisplayName=CorridorWidth))
    -> FloatProperty(Value=1) => #3
    #1, #3 -> CombineLatest
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression:
        new(
        it.Item1 as Height,
        it.Item2 as Width,
        it.Item1 * 0.5 as HeightOffset,
        it.Item2 * 0.5 as WidthOffset)
    -> BehaviorSubject CorridorSpecs

    GroupWorkflow TrialType1
        PublishSubject<System.Reactive.Unit> EndTrial
        -> Take(Count=1)
        -> WorkflowOutput

        GroupWorkflow DrawTrial
            IncludeWorkflow Floor(Path=Extensions\DrawFloorSegment.bonsai, TextureFloor=Floor, IsVisible=true, Start=5.5, End=0)

            Annotation "SegmentName, Function, Value>"(Text="")
            -> BehaviorSubject<System.Tuple(System.String,System.String,System.String)> SegmentCommands
            -> GroupBy(KeySelector=Item1)
            -> PublishSubject GroupBySegmentCommands

            IncludeWorkflow LickingZone
              Path=Extensions\DrawSegment.bonsai
              TextureLeftFileName=Assets\Textures\CamiloReward.jpg
              TextureRightFileName=Assets\Textures\colorful_dots.jpg
              IsVisible=true
              Start=5
              End=5.5
            -> Take(Count=1) => #6
            IncludeWorkflow Landmark3
              Path=Extensions\DrawSegment.bonsai
              TextureLeftFileName=Assets\Textures\null.png
              TextureRightFileName=Assets\Textures\null.png
              IsVisible=true
              Start=4
              End=5
            -> Take(Count=1) => #8
            IncludeWorkflow StimB
              Path=Extensions\DrawSegment.bonsai
              TextureLeftFileName=Assets\Textures\null.png
              TextureRightFileName=Assets\Textures\null.png
              IsVisible=false
              Start=3
              End=4
            -> Take(Count=1) => #10
            IncludeWorkflow Landmark2
              Path=Extensions\DrawSegment.bonsai
              TextureLeftFileName=Assets\Textures\null.png
              TextureRightFileName=Assets\Textures\null.png
              IsVisible=true
              Start=2
              End=3
            -> Take(Count=1) => #12
            IncludeWorkflow StimA
              Path=Extensions\DrawSegment.bonsai
              TextureLeftFileName=Assets\Textures\null.png
              TextureRightFileName=Assets\Textures\null.png
              IsVisible=true
              Start=1
              End=2
            -> Take(Count=1) => #14
            IncludeWorkflow Landmark1
              Path=Extensions\DrawSegment.bonsai
              TextureLeftFileName=Assets\Textures\null.png
              TextureRightFileName=Assets\Textures\null.png
              IsVisible=true
              Start=0
              End=1
            -> Take(Count=1) => #16
            #6, #8, #10, #12, #14, #16 -> Concat
            -> ReplaySubject TrialSegments(BufferSize=nil)
            -> Count
            -> AsyncSubject NSegments

            SubscribeSubject TrialSegments
            -> Merge
            -> BehaviorSubject SegmentEvents

        GroupWorkflow TrialLogic
            IncludeWorkflow
              Path=Extensions\ControlPassiveGain.bonsai
              SegmentNameFilter=Stim
              InsideEnableActivateUpdates=false
              InsidePassiveGain=0.01
              OutsideEnableActivateUpdates=true
              OutsidePassiveGain=0
            -> Merge

            IncludeWorkflow(Path=Extensions\Teleport.bonsai, LockAtThreshold=true, TeleportThreshold=5, DelayTeleport=PT1S, TeleportToPosition=0)
            -> Merge
            -> Unit
            -> MulticastSubject EndTrial

            IncludeWorkflow(Path=Extensions\DrawRewardAmount.bonsai)
            -> PropertyMapping(RewardAmount)
            -> IncludeWorkflow(Path=Extensions\Reward.bonsai, RewardThreshold=5, DelayReward=PT1S, RewardAmount=25)
            -> Merge

            IncludeWorkflow(Path=Extensions\OptoStim.bonsai, StimThreshold=3, DelayToStim=PT0S, StimId=0)
            -> Merge

            IncludeWorkflow(Path=Extensions\TeleportOnLick.bonsai, TeleportToPosition=0, RefractoryPeriod=PT1S)
            -> Disable Merge

            IncludeWorkflow(Path=Extensions\SetWallVisibility.bonsai, LeftWallVisibility=true, RightWallVisibility=false, SegmentName=StimB, PositionThreshold=3, DelayToStim=PT0S)
            -> Merge
    -> GroupWorkflow ResetState
        WorkflowInput Source1
        -> FloatProperty(Value=0)
        -> MulticastSubject PassiveUpdateGain
        -> WorkflowOutput
    -> Take(Count=1)
    -> Repeat

Annotation(Text="")
-> GroupWorkflow Visualizers
    SubscribeSubject FrameEventLogger => #0
    -> Condition Lick
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Lick))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #2
      Expression:
        new(
        Double.NaN as Reward,
        1.0 as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Reward
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Reward))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #4
      Expression:
        new(
        Double.NaN as Reward,
        2.0 as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition OptoStim
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=OptoStim))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #6
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        3.0 as OptoStim,
        Double.NaN as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition Teleport
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=Teleport))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        4.0 as Telepoprt,
        Double.NaN as WallVisibility,
        Frame.Time as Time
        )
    #0 -> Condition WallVisibility
        WorkflowInput Source1
        -> MemberSelector(Selector=EventName) => #1
        ExternalizedMapping(Value) => #2
        #1, #2 -> Equal(Operand=StringProperty(Value=WallVisibility))
        -> WorkflowOutput
    -> Bonsai.Scripting.Expressions.ExpressionTransform => #10
      Expression:
        new(
        Double.NaN as Reward,
        Double.NaN as Lick,
        Double.NaN as OptoStim,
        Double.NaN as Telepoprt,
        5.0 as WallVisibility,
        Frame.Time as Time
        )
    #2, #4, #6, #8, #10 -> Merge
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Time, ValueSelector="Lick,Reward,OptoStim,Telepoprt,WallVisibility", SymbolType=Circle, LineWidth=0, Capacity=nil, Min=nil, Max=nil)
    -> VisualizerMapping => #13
    SubscribeSubject FrameEventLogger
    -> VisualizerMapping => #15
    SubscribeSubject RotaryEncoderPosition
    -> MemberSelector(Selector=RotaryEncoder)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #19
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> Bonsai.Dsp.Difference(Order=1)
    -> VisualizerMapping => #23
    SubscribeSubject CurrentPosition
    -> MemberSelector(Selector=Z)
    -> VisualizerMapping => #26
    Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="")
    -> VisualizerMapping => #28
    #13, #15, #19, #23, #26, #28 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder(ColumnCount=3, RowCount=2, ColumnStyles="", RowStyles="", CellSpans="")
    -> WorkflowOutput

GroupWorkflow DEBUG
    SubscribeSubject PostDrawing
    -> Bonsai.Shaders.UpdateRenderState(RenderState="")
    -> Bonsai.Shaders.UpdateViewportState(X=0, Y=0, Width=1, Height=1)
    -> IncludeWorkflow(Path=BonVision:Environment.OrthographicView.bonsai, Left=-1, Right=1, Bottom=-1, Top=1) => #3
    SubscribeSubject CurrentPosition
    -> Format(Format={0:0.####}, Selector=it.Z)
    -> PropertyMapping(Text) => #6
    #3, #6 -> IncludeWorkflow
      Path=BonVision:Primitives.DrawText.bonsai
      ExtentX=1
      ExtentY=1
      Text=0
      Font="Microsoft Sans Serif, 48pt"
      Alignment=Center
      LineAlignment=Center
      TextRenderingHint=AntiAliasGridFit
      Color(Val0=255, Val1=255, Val2=255, Val3=255)
      LocationX=0
      LocationY=0.95
      Layer=0
      Angle=0
    -> WorkflowOutput
